PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant': '', 'age (years)': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Show mouse = True
  Units = norm
  Window size (pixels) = [1536, 864]
  expName = Mental Fatigue Testing Session
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Routines
  Routine timer
    CodeComponent timer_code
      Code Type = Auto->JS
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      Begin Experiment:
        probeVal = []
      Each Frame:
        if loopTimer.getTime() > 600:
            currentLoop.finished = True
      End Routine:
        psychoJS.experiment.addData('elapsed.time', elapsedTime.getTime())
    TextComponent timer_text
      letterHeight = 0.3
      opacity = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = x
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  Routine AXCPTtrial
    CodeComponent AXCPTtrial_code
      Code Type = Both
      Begin Experiment:
        Bletters = ["B", "C", "D", "E", "F", "G", "H", "I", "J", "K", "L", "M", "N", "O", "P", "Q", "R", "S", "T", "U", "V", "W", "X", "Z"];
        Yletters = ["A", "B", "C", "D", "E", "F", "G", "H", "I", "J", "K", "L", "M", "N", "O", "P", "Q", "R", "S", "T", "U", "V", "W", "Z"];
        distractors = ["A", "B", "C", "D", "E", "F", "G", "H", "I", "J", "K", "L", "M", "N", "O", "P", "Q", "R", "S", "T", "U", "V", "W", "X", "Z"];
      Begin JS Experiment:
        Bletters = ["B", "C", "D", "E", "F", "G", "H", "I", "J", "K", "L", "M", "N", "O", "P", "Q", "R", "S", "T", "U", "V", "W", "X", "Z"];
        Yletters = ["A", "B", "C", "D", "E", "F", "G", "H", "I", "J", "K", "L", "M", "N", "O", "P", "Q", "R", "S", "T", "U", "V", "W", "Z"];
        distractors = ["A", "B", "C", "D", "E", "F", "G", "H", "I", "J", "K", "L", "M", "N", "O", "P", "Q", "R", "S", "T", "U", "V", "W", "X", "Z"];
      Begin JS Routine:
        function choice(arr) {
          return arr[Math.floor(Math.random() * arr.length)];
        }

        distractor1Val = choice(distractors);
        distractor2Val = choice(distractors);
        if ((trialType === "target")) {
            cueVal = "A";
            probeVal = "X";
        } else {
            if ((trialType === "probeWrong")) {
                cueVal = "A";
                probeVal = choice(Yletters);
            } else {
                if ((trialType === "cueWrong")) {
                    cueVal = choice(Bletters);
                    probeVal = "X";
                } else {
                    if ((trialType === "bothWrong")) {
                        cueVal = choice(Bletters);
                        probeVal = choice(Yletters);
                    }
                }
            }
        }
      Begin Routine:
        #function choice(arr) {
        #  return arr[Math.floor(Math.random() * arr.length)];
        #}

        distractor1Val = choice(distractors)
        distractor2Val = choice(distractors)



        if trialType == 'target':
            cueVal = 'A'
            probeVal = 'X'

        elif trialType == 'probeWrong':
            cueVal = 'A'
            probeVal = choice(Yletters)

        elif trialType == 'cueWrong':
            cueVal = choice(Bletters)
            probeVal = 'X'

        elif trialType == 'bothWrong':
            cueVal = choice(Bletters)
            probeVal = choice(Yletters)
    TextComponent cue_text
      color = $[1.000,-1.000,-1.000]
      durationEstim = 0.3
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.3
      text [set every repeat] = $cueVal
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    TextComponent break1
      letterHeight = 0.1
      opacity = 0
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 1.2
      text = x
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    TextComponent distractor1
      letterHeight = 0.15
      startVal [time (s)] = 1.5
      stopVal [time (s)] = 1.8
      text [set every repeat] = $distractor1Val
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    TextComponent break2
      letterHeight = 0.1
      opacity = 0
      startVal [time (s)] = 1.8
      stopVal [duration (s)] = 1.2
      text = x
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    TextComponent distractor2
      letterHeight = 0.15
      startVal [time (s)] = 3
      stopVal [time (s)] = 3.3
      text [set every repeat] = $distractor2Val
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    TextComponent break3
      letterHeight = 0.1
      opacity = 0
      startVal [time (s)] = 3.3
      stopVal [duration (s)] = 1.2
      text = x
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  Routine AXCPTprobe
    TextComponent probe_text
      color = $[1.000,-1.000,-1.000]
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.3
      text [set every repeat] = $probeVal
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    KeyboardComponent AXCPT_resp
      allowedKeys = 'k', 'd'
      correctAns = $corrResponse
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 1.5
      storeCorrect = True
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  Routine AXCPTfeedback
    CodeComponent AXCPTfeedback_code
      Code Type = Auto->JS
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      Begin Experiment:
        msg = ' '
      Begin Routine:
        if AXCPT_resp.corr:
            msg = "Correct"
        else:
            msg = "Incorrect"
    TextComponent AXCPTfeedback_text
      color = $[1.000,1.000,-1.000]
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine NBackFirst3Trials
    CodeComponent NBackFirst3Trials_code
      Code Type = Auto->JS
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      Begin Experiment:
        Back2minus1=[]
        Back2minus2=[]
        Back2minus3=[]
      Begin Routine:
        letters = ['B', 'C', 'D', 'F', 'G', 'H', 'J', 'K', 'L', 'M', 'N', 'P', 'Q', 'R', 'S', 'T', 'V', 'W', 'X', 'Z']
        nletter=choice(letters)
      End Routine:
        Back2minus3=Back2minus2
        Back2minus2=Back2minus1
        Back2minus1=nletter
    TextComponent NBackText_1
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 2
      text [set every repeat] = $nletter
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    KeyboardComponent NBack_resp_1
      allowedKeys = 'k', 'd'
      correctAns = $corrResponse
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 2
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  Routine NBackRemainderTrials
    CodeComponent NBackTrials_code
      Code Type = Both
      Begin JS Routine:
        function choice(arr) {
          return arr[Math.floor(Math.random() * arr.length)];
        }

        if ((trialType === "nonTarget")) {
            letters = ["B", "C", "D", "F", "G", "H", "J", "K", "L", "M", "N", "P", "Q", "R", "S", "T", "V", "W", "X", "Z"];
            nletter = choice(letters);
            if ((nletter === Back2minus1)) {
                nletter = choice(letters);
            }
            if ((nletter === Back2minus2)) {
                nletter = choice(letters);
            }
        } else {
            if ((trialType === "target")) {
                nletter = Back2minus3;
            }
        }
      Begin Routine:
        if trialType=='nonTarget':
            letters = ['B', 'C', 'D', 'F', 'G', 'H', 'J', 'K', 'L', 'M', 'N', 'P', 'Q', 'R', 'S', 'T', 'V', 'W', 'X', 'Z']
            nletter=choice(letters)
            if nletter==Back2minus1:
                    nletter=choice(letters)
            if nletter==Back2minus2:
                    nletter=choice(letters)
        elif trialType=='target':
            nletter=Back2minus3
      End JS Routine:
        Back2minus3 = Back2minus2;
        Back2minus2 = Back2minus1;
        Back2minus1 = nletter;
      End Routine:
        Back2minus3=Back2minus2
        Back2minus2=Back2minus1
        Back2minus1=nletter
    TextComponent NBackText_2
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 2
      text [set every repeat] = $nletter
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    KeyboardComponent NBack_resp_2
      allowedKeys = 'k', 'd'
      correctAns = $corrResponse
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 2
      storeCorrect = True
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  Routine mentRotTrial
    ImageComponent mentRotStimulus
      image [set every repeat] = $imagefile
      size = (0.935, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.5
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    KeyboardComponent MROT_resp
      allowedKeys = 'k', 'd'
      correctAns = $corrResponse
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.5
      storeCorrect = True
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  Routine mentRotFeedback
    CodeComponent NBackfeedback_code_2
      Code Type = Auto->JS
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      Begin Experiment:
        msg = ' '
      Begin Routine:
        if MROT_resp.corr:
            msg = "Correct"
        else:
            msg = "Incorrect"
    TextComponent NBackfeedback_text_2
      color = $[1.000,1.000,-1.000]
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine NBackFeedback
    CodeComponent NBackfeedback_code
      Code Type = Auto->JS
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      Begin Experiment:
        msg = ' '
      Begin Routine:
        if NBack_resp_2.corr:
            msg = "Correct"
        else:
            msg = "Incorrect"
    TextComponent AXCPTfeedback_text_2
      color = $[1.000,1.000,-1.000]
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine intro
    CodeComponent maths_js_fix_code
      Code Type = JS
      Begin JS Experiment:
        // Code to fix reference errors in JS
          thisExp = psychoJS.experiment;
          win = psychoJS.window;
          event = psychoJS.eventManager;
          Array.prototype.append = [].push;
          shuffle = util.shuffle;
          document.documentElement.style.cursor = 'none';

          // Math related fixes
          //pi = Math.PI;
          //sin = Math.sin;
          //cos = Math.cos;
          //sqrt = Math.sqrt;
          randint = function(min, maxplusone) {
            return Math.floor(Math.random() * (maxplusone - min) ) + min;
          }
          shuffle = util.shuffle;
          elapsedTime = new util.Clock();

        //  function choice(arr) {
        //    return arr[Math.floor(Math.random() * arr.length)];
        //  }
    CodeComponent elapsed_time
      Code Type = Auto->JS
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      Begin Experiment:
        elapsedTime = util.Clock()
      End Routine:
        psychoJS.experiment.addData('elapsed.time', elapsedTime.getTime())
    CodeComponent centerAlignMaster
      Code Type = Auto->JS
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      Before Experiment:
        document.body.style.cursor='auto';
      Begin Routine:
        BRUMSheader.setAlignHoriz('center')

        instrHeaderText_2.setAlignHoriz('center')
        instrHeaderText_3.setAlignHoriz('center')
        instrHeaderText_5.setAlignHoriz('center')
        instrHeaderText_9.setAlignHoriz('center')
        instrHeaderText_7.setAlignHoriz('center')
        instrHeaderText_11.setAlignHoriz('center')
        instrHeaderText_13.setAlignHoriz('center')
        instrHeaderText_10.setAlignHoriz('center')
        instrHeaderText_12.setAlignHoriz('center')
        instrHeaderText_14.setAlignHoriz('center')
        instrHeaderText_8.setAlignHoriz('center')

        text_2.setAlignHoriz('center')
        text_8.setAlignHoriz('center')
        text_9.setAlignHoriz('center')
        text_10.setAlignHoriz('center')
        text_11.setAlignHoriz('center')
        text_3.setAlignHoriz('center')
        text_5.setAlignHoriz('center')
        text_19.setAlignHoriz('center')
        text_13.setAlignHoriz('center')
        text_7.setAlignHoriz('center')
        text_15.setAlignHoriz('center')
        text_17.setAlignHoriz('center')
        text_14.setAlignHoriz('center')
        text_16.setAlignHoriz('center')
        text_18.setAlignHoriz('center')
        text_12.setAlignHoriz('center')
        text_20.setAlignHoriz('center')

        BRUMSheader_2.setAlignHoriz('center')
    KeyboardComponent key_resp
      allowedKeys = "right"
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent instrHeaderText
      letterHeight = 0.1
      opacity = 0
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text = Introduction
      units = norm
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    TextComponent text
      letterHeight = 0.075
      startVal [time (s)] = 0
      units = norm
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      text:
        Welcome to the testing session

        Before you begin, please make sure that you are sitting comfortably in a quiet environment where you will not be interrupted. Please also ensure that your computer is connected to a power source and will not enter sleep mode

        In this session you will spend 2-3 hours repeating the tasks that you learned in the training session. There will be multiple chances for you to take rest breaks if you need to

        If you decide that you do not want to continue you can press the escape key at any time to quit the experiment. If you quit, your data will not be saved

        Before the tasks begin, you will complete some ratings. Please press the right arrow on your keyboard to continue
  Routine instrNBACKbreak2
    CodeComponent instrNBACK_timer
      Code Type = Auto->JS
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      Begin Routine:
        instrNBACKbreak2Timer = util.Clock()
      End Routine:
        psychoJS.experiment.addData('elapsed.time', elapsedTime.getTime())
        psychoJS.experiment.addData('break2.duration', instrNBACKbreak2Timer.getTime())
        instrNBACKbreak2Timer = []
    KeyboardComponent key_resp_3
      allowedKeys = ["k"]
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent instrHeaderText_3
      letterHeight = 0.1
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text = Optional rest break
      units = norm
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    TextComponent text_3
      letterHeight = 0.075
      startVal [time (s)] = 0
      units = norm
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      text [set every repeat]:
        Next task: N-Back

        Decide whether the letter on the screen is the same as the one 3 letters ago

        Press 'k' if it is the same

        Press 'd' if it is not the same

        Respond as quickly and accurately as possible

        Press 'k' when ready to begin
  Routine instrAXCPTbreak1
    CodeComponent instrAXCPT_timer
      Code Type = Auto->JS
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      Begin Routine:
        instrAXCPTbreak1Timer = util.Clock()
      End Routine:
        psychoJS.experiment.addData('elapsed.time', elapsedTime.getTime())
        psychoJS.experiment.addData('break1.duration', instrAXCPTbreak1Timer.getTime())
        instrAXCPTbreak1Timer = []
    KeyboardComponent key_resp_2
      allowedKeys = ["k"]
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent instrHeaderText_2
      letterHeight = 0.1
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text = Optional rest break
      units = norm
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    TextComponent text_2
      letterHeight = 0.075
      startVal [time (s)] = 0
      units = norm
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      text:
        Next task: AX-CPT

        Press 'k' when first red letter is 'A' and second red letter is 'X'

        Press 'd' for any other combination of letters

        Respond as quickly and accurately as possible

        Press 'k' when ready to begin
  Routine BRUMS_1
    CodeComponent force_end_code
      Code Type = Auto->JS
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      Begin Routine:
        BRUMSTimer = util.Clock()
      Each Frame:
        if slider1.getRating() > 0 and slider2.getRating() > 0 and slider3.getRating() > 0 and slider4.getRating() > 0 and slider5.getRating() > 0 and slider6.getRating() > 0 and slider7.getRating() > 0 and slider8.getRating() > 0:
            continueRoutine = false
    MouseComponent mouse_3
      forceEndRoutineOnPress = never
      saveMouseState = never
      startVal [time (s)] = 0.5
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    PolygonComponent mouse_visibility_fix
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      nVertices = 180
      pos [set every frame] = (mouse_3.getPos()[0], mouse_3.getPos()[1])
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    SliderComponent slider1
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ("Not at all", "A little", "Moderately", "Quite a bit", "Extremely")
      pos = (0.1, 0.6)
      size = (0.75, 0.1)
      startVal [time (s)] = 0.0
      styles = ['rating', 'whiteOnBlack']
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent slider2
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ("Not at all", "A little", "Moderately", "Quite a bit", "Extremely")
      pos = (0.1, 0.4)
      size = (0.75, 0.1)
      startVal [time (s)] = 0.0
      styles = ['rating', 'whiteOnBlack']
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent slider3
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ("Not at all", "A little", "Moderately", "Quite a bit", "Extremely")
      pos = (0.1, 0.2)
      size = (0.75, 0.1)
      startVal [time (s)] = 0.0
      styles = ['rating', 'whiteOnBlack']
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent slider4
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ("Not at all", "A little", "Moderately", "Quite a bit", "Extremely")
      pos = (0.1, 0.0)
      size = (0.75, 0.1)
      startVal [time (s)] = 0.0
      styles = ['rating', 'whiteOnBlack']
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent slider5
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ("Not at all", "A little", "Moderately", "Quite a bit", "Extremely")
      pos = (0.1, -0.2)
      size = (0.75, 0.1)
      startVal [time (s)] = 0.0
      styles = ['rating', 'whiteOnBlack']
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent slider6
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ("Not at all", "A little", "Moderately", "Quite a bit", "Extremely")
      pos = (0.1, -0.4)
      size = (0.75, 0.1)
      startVal [time (s)] = 0.0
      styles = ['rating', 'whiteOnBlack']
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent slider7
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ("Not at all", "A little", "Moderately", "Quite a bit", "Extremely")
      pos = (0.1, -0.6)
      size = (0.75, 0.1)
      startVal [time (s)] = 0.0
      styles = ['rating', 'whiteOnBlack']
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent slider8
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ("Not at all", "A little", "Moderately", "Quite a bit", "Extremely")
      pos = (0.1, -0.8)
      size = (0.75, 0.1)
      startVal [time (s)] = 0.0
      styles = ['rating', 'whiteOnBlack']
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text_9
      letterHeight = 0.075
      pos = (0, 0.82)
      startVal [time (s)] = 0
      units = norm
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      text:
        Rating Scales: Page 1 of 3

        Describe how you feel right now
    TextComponent panicky
      letterHeight = 0.075
      pos = (-0.5, 0.6)
      startVal [time (s)] = 0.0
      text = Panicky
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    TextComponent lively
      letterHeight = 0.075
      pos = (-0.5, 0.4)
      startVal [time (s)] = 0.0
      text = Lively
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    TextComponent confused
      letterHeight = 0.075
      pos = (-0.5, 0.2)
      startVal [time (s)] = 0.0
      text = Confused
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    TextComponent wornout
      letterHeight = 0.075
      pos = (-0.5, 0.0)
      startVal [time (s)] = 0.0
      text = Worn Out
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    TextComponent depressed
      letterHeight = 0.075
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = Depressed
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    TextComponent downheartened
      letterHeight = 0.075
      pos = (-0.5, -0.4)
      startVal [time (s)] = 0.0
      text = Downheartened
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    TextComponent annoyed
      letterHeight = 0.075
      pos = (-0.5, -0.6)
      startVal [time (s)] = 0.0
      text = Annoyed
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    TextComponent exhausted
      letterHeight = 0.075
      pos = (-0.5, -0.8)
      startVal [time (s)] = 0.0
      text = Exhausted
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  Routine BRUMS_2
    CodeComponent force_end_code_2
      Code Type = Auto->JS
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      Each Frame:
        if slider9.getRating() > 0 and slider10.getRating() > 0 and slider11.getRating() > 0 and slider12.getRating() > 0 and slider13.getRating() > 0 and slider14.getRating() > 0 and slider15.getRating() > 0 and slider16.getRating() > 0:
            continueRoutine = false
    MouseComponent mouse_5
      forceEndRoutineOnPress = never
      saveMouseState = never
      startVal [time (s)] = 0.5
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    PolygonComponent mouse_visibility_fix_2
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      nVertices = 180
      pos [set every frame] = (mouse_5.getPos()[0], mouse_5.getPos()[1])
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    SliderComponent slider9
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ("Not at all", "A little", "Moderately", "Quite a bit", "Extremely")
      pos = (0.1, 0.6)
      size = (0.75, 0.1)
      startVal [time (s)] = 0.0
      styles = ['rating', 'whiteOnBlack']
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent slider10
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ("Not at all", "A little", "Moderately", "Quite a bit", "Extremely")
      pos = (0.1, 0.4)
      size = (0.75, 0.1)
      startVal [time (s)] = 0.0
      styles = ['rating', 'whiteOnBlack']
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent slider11
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ("Not at all", "A little", "Moderately", "Quite a bit", "Extremely")
      pos = (0.1, 0.2)
      size = (0.75, 0.1)
      startVal [time (s)] = 0.0
      styles = ['rating', 'whiteOnBlack']
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent slider12
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ("Not at all", "A little", "Moderately", "Quite a bit", "Extremely")
      pos = (0.1, 0.0)
      size = (0.75, 0.1)
      startVal [time (s)] = 0.0
      styles = ['rating', 'whiteOnBlack']
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent slider13
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ("Not at all", "A little", "Moderately", "Quite a bit", "Extremely")
      pos = (0.1, -0.2)
      size = (0.75, 0.1)
      startVal [time (s)] = 0.0
      styles = ['rating', 'whiteOnBlack']
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent slider14
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ("Not at all", "A little", "Moderately", "Quite a bit", "Extremely")
      pos = (0.1, -0.4)
      size = (0.75, 0.1)
      startVal [time (s)] = 0.0
      styles = ['rating', 'whiteOnBlack']
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent slider15
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ("Not at all", "A little", "Moderately", "Quite a bit", "Extremely")
      pos = (0.1, -0.6)
      size = (0.75, 0.1)
      startVal [time (s)] = 0.0
      styles = ['rating', 'whiteOnBlack']
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent slider16
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ("Not at all", "A little", "Moderately", "Quite a bit", "Extremely")
      pos = (0.1, -0.8)
      size = (0.75, 0.1)
      startVal [time (s)] = 0.0
      styles = ['rating', 'whiteOnBlack']
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text_10
      letterHeight = 0.075
      pos = (0, 0.82)
      startVal [time (s)] = 0
      units = norm
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      text:
        Rating Scales: Page 2 of 3

        Describe how you feel right now
    TextComponent mixedup
      letterHeight = 0.075
      pos = (-0.5, 0.6)
      startVal [time (s)] = 0.0
      text = Mixed-up
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    TextComponent sleepy
      letterHeight = 0.075
      pos = (-0.5, 0.4)
      startVal [time (s)] = 0.0
      text = Sleepy
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    TextComponent bitter
      letterHeight = 0.075
      pos = (-0.5, 0.2)
      startVal [time (s)] = 0.0
      text = Bitter
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    TextComponent unhappy
      letterHeight = 0.075
      pos = (-0.5, 0.0)
      startVal [time (s)] = 0.0
      text = Unhappy
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    TextComponent anxious
      letterHeight = 0.075
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = Anxious
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    TextComponent worried
      letterHeight = 0.075
      pos = (-0.5, -0.4)
      startVal [time (s)] = 0.0
      text = Worried
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    TextComponent energetic
      letterHeight = 0.075
      pos = (-0.5, -0.6)
      startVal [time (s)] = 0.0
      text = Energetic
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    TextComponent miserable
      letterHeight = 0.075
      pos = (-0.5, -0.8)
      startVal [time (s)] = 0.0
      text = Miserable
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  Routine BRUMS_3
    CodeComponent force_end_code_3
      Code Type = Auto->JS
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      Each Frame:
        if slider17.getRating() > 0 and slider18.getRating() > 0 and slider19.getRating() > 0 and slider20.getRating() > 0 and slider21.getRating() > 0 and slider22.getRating() > 0 and slider23.getRating() > 0 and slider24.getRating() > 0:
            continueRoutine = false
    CodeComponent BRUMS2_timer_2
      Code Type = Auto->JS
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      End Routine:
        psychoJS.experiment.addData('elapsed.time', elapsedTime.getTime())
        psychoJS.experiment.addData('BRUMS.duration', BRUMSTimer.getTime())
    MouseComponent mouse_6
      forceEndRoutineOnPress = never
      saveMouseState = never
      startVal [time (s)] = 0.5
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    PolygonComponent mouse_visibility_fix_3
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      nVertices = 180
      pos [set every frame] = (mouse_6.getPos()[0], mouse_6.getPos()[1])
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    SliderComponent slider17
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ("Not at all", "A little", "Moderately", "Quite a bit", "Extremely")
      pos = (0.1, 0.6)
      size = (0.75, 0.1)
      startVal [time (s)] = 0.0
      styles = ['rating', 'whiteOnBlack']
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent slider18
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ("Not at all", "A little", "Moderately", "Quite a bit", "Extremely")
      pos = (0.1, 0.4)
      size = (0.75, 0.1)
      startVal [time (s)] = 0.0
      styles = ['rating', 'whiteOnBlack']
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent slider19
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ("Not at all", "A little", "Moderately", "Quite a bit", "Extremely")
      pos = (0.1, 0.2)
      size = (0.75, 0.1)
      startVal [time (s)] = 0.0
      styles = ['rating', 'whiteOnBlack']
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent slider20
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ("Not at all", "A little", "Moderately", "Quite a bit", "Extremely")
      pos = (0.1, 0.0)
      size = (0.75, 0.1)
      startVal [time (s)] = 0.0
      styles = ['rating', 'whiteOnBlack']
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent slider21
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ("Not at all", "A little", "Moderately", "Quite a bit", "Extremely")
      pos = (0.1, -0.2)
      size = (0.75, 0.1)
      startVal [time (s)] = 0.0
      styles = ['rating', 'whiteOnBlack']
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent slider22
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ("Not at all", "A little", "Moderately", "Quite a bit", "Extremely")
      pos = (0.1, -0.4)
      size = (0.75, 0.1)
      startVal [time (s)] = 0.0
      styles = ['rating', 'whiteOnBlack']
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent slider23
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ("Not at all", "A little", "Moderately", "Quite a bit", "Extremely")
      pos = (0.1, -0.6)
      size = (0.75, 0.1)
      startVal [time (s)] = 0.0
      styles = ['rating', 'whiteOnBlack']
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent slider24
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ("Not at all", "A little", "Moderately", "Quite a bit", "Extremely")
      pos = (0.1, -0.8)
      size = (0.75, 0.1)
      startVal [time (s)] = 0.0
      styles = ['rating', 'whiteOnBlack']
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text_11
      letterHeight = 0.075
      pos = (0, 0.82)
      startVal [time (s)] = 0
      units = norm
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      text:
        Rating Scales: Page 3 of 3

        Describe how you feel right now
    TextComponent muddled
      letterHeight = 0.075
      pos = (-0.5, 0.6)
      startVal [time (s)] = 0.0
      text = Muddled
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    TextComponent nervous
      letterHeight = 0.075
      pos = (-0.5, 0.4)
      startVal [time (s)] = 0.0
      text = Nervous
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    TextComponent angry
      letterHeight = 0.075
      pos = (-0.5, 0.2)
      startVal [time (s)] = 0.0
      text = Angry
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    TextComponent active
      letterHeight = 0.075
      pos = (-0.5, 0.0)
      startVal [time (s)] = 0.0
      text = Active
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    TextComponent tired
      letterHeight = 0.075
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = Tired
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    TextComponent badtempered
      letterHeight = 0.075
      pos = (-0.5, -0.4)
      startVal [time (s)] = 0.0
      text = Bad tempered
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    TextComponent alert
      letterHeight = 0.075
      pos = (-0.5, -0.6)
      startVal [time (s)] = 0.0
      text = Alert
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    TextComponent uncertain
      letterHeight = 0.075
      pos = (-0.5, -0.8)
      startVal [time (s)] = 0.0
      text = Uncertain
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  Routine createLoopTimer
    CodeComponent create_timer_1_code
      Code Type = Auto->JS
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      Begin Routine:
        loopTimer = util.Clock()
  Routine instrAXCPTbreak6
    CodeComponent instrAXCPT_timer_2
      Code Type = Auto->JS
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      Begin Routine:
        instrAXCPTbreak6Timer = util.Clock()
      End Routine:
        psychoJS.experiment.addData('elapsed.time', elapsedTime.getTime())
        psychoJS.experiment.addData('break6.duration', instrAXCPTbreak6Timer.getTime())
        instrAXCPTbreak6Timer = []
    KeyboardComponent key_resp_6
      allowedKeys = ["k"]
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent instrHeaderText_7
      letterHeight = 0.1
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text = Optional rest break
      units = norm
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    TextComponent text_7
      letterHeight = 0.075
      startVal [time (s)] = 0
      units = norm
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      text:
        Next task: AX-CPT

        Press 'k' when first red letter is 'A' and second red letter is 'X'

        Press 'd' for any other combination of letters

        Respond as quickly and accurately as possible

        Press 'k' when ready to begin
  Routine instrAXCPTbreak12
    CodeComponent instrAXCPT_timer_3
      Code Type = Auto->JS
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      Begin Routine:
        instrAXCPTbreak12Timer = util.Clock()
      End Routine:
        psychoJS.experiment.addData('elapsed.time', elapsedTime.getTime())
        psychoJS.experiment.addData('break12.duration', instrAXCPTbreak12Timer.getTime())
        instrAXCPTbreak12Timer = []
    KeyboardComponent key_resp_7
      allowedKeys = ["k"]
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent instrHeaderText_8
      letterHeight = 0.1
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text = Optional rest break
      units = norm
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    TextComponent text_12
      letterHeight = 0.075
      startVal [time (s)] = 0
      units = norm
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      text:
        Next task: AX-CPT

        Press 'k' when first red letter is 'A' and second red letter is 'X'

        Press 'd' for any other combination of letters

        Respond as quickly and accurately as possible

        Press 'k' when ready to begin
  Routine instrNBACKbreak5
    CodeComponent instrNBACK_timer_4
      Code Type = Auto->JS
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      Begin Routine:
        instrNBACKbreak5Timer = util.Clock()
      End Routine:
        psychoJS.experiment.addData('elapsed.time', elapsedTime.getTime())
        psychoJS.experiment.addData('break5.duration', instrNBACKbreak5Timer.getTime())
        instrNBACKbreak5Timer = []
    KeyboardComponent key_resp_8
      allowedKeys = ["k"]
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent instrHeaderText_9
      letterHeight = 0.1
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text = Optional rest break
      units = norm
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    TextComponent text_13
      letterHeight = 0.075
      startVal [time (s)] = 0
      units = norm
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      text [set every repeat]:
        Next task: N-Back

        Decide whether the letter on the screen is the same as the one 3 letters ago

        Press 'k' if it is the same

        Press 'd' if it is not the same

        Respond as quickly and accurately as possible

        Press 'k' when ready to begin
  Routine instrNBACKbreak9
    CodeComponent instrNBACK_timer_5
      Code Type = Auto->JS
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      Begin Routine:
        instrNBACKbreak9Timer = util.Clock()
      End Routine:
        psychoJS.experiment.addData('elapsed.time', elapsedTime.getTime())
        psychoJS.experiment.addData('break9.duration', instrNBACKbreak9Timer.getTime())
        instrNBACKbreak9Timer = []
    KeyboardComponent key_resp_9
      allowedKeys = ["k"]
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent instrHeaderText_10
      letterHeight = 0.1
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text = Optional rest break
      units = norm
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    TextComponent text_14
      letterHeight = 0.075
      startVal [time (s)] = 0
      units = norm
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      text [set every repeat]:
        Next task: N-Back

        Decide whether the letter on the screen is the same as the one 3 letters ago

        Press 'k' if it is the same

        Press 'd' if it is not the same

        Respond as quickly and accurately as possible

        Press 'k' when ready to begin
  Routine instrMENTROTbreak8
    CodeComponent instrNBACK_timer_8
      Code Type = Auto->JS
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      Begin Routine:
        instrMENTROTbreak8Timer = util.Clock()
      End Routine:
        psychoJS.experiment.addData('elapsed.time', elapsedTime.getTime())
        psychoJS.experiment.addData('break8.duration', instrMENTROTbreak8Timer.getTime())
        instrMENTROTbreak8Timer = []
    KeyboardComponent key_resp_10
      allowedKeys = ["k"]
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent instrHeaderText_13
      letterHeight = 0.1
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text = Optional rest break
      units = norm
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    TextComponent text_17
      letterHeight = 0.075
      startVal [time (s)] = 0
      units = norm
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      text [set every repeat]:
        Next task: Mental Rotation

        Decide if the two shapes are the same

        Press 'k' they are the same

        Press 'd' if they are not the same

        Respond as quickly and accurately as possible

        Press 'k' when ready to begin
  Routine instrMENTROTbreak11
    CodeComponent instrNBACK_timer_9
      Code Type = Auto->JS
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      Begin Routine:
        instrMENTROTbreak11Timer = util.Clock()
      End Routine:
        psychoJS.experiment.addData('elapsed.time', elapsedTime.getTime())
        psychoJS.experiment.addData('break11.duration', instrMENTROTbreak11Timer.getTime())
        instrMENTROTbreak11Timer = []
    KeyboardComponent key_resp_11
      allowedKeys = ["k"]
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent instrHeaderText_14
      letterHeight = 0.1
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text = Optional rest break
      units = norm
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    TextComponent text_18
      letterHeight = 0.075
      startVal [time (s)] = 0
      units = norm
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      text [set every repeat]:
        Next task: Mental Rotation

        Decide if the two shapes are the same

        Press 'k' they are the same

        Press 'd' if they are not the same

        Respond as quickly and accurately as possible

        Press 'k' when ready to begin
  Routine instrBRUMSpost
    CodeComponent instrBRUMStimer_2
      Code Type = Auto->JS
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      End Routine:
        psychoJS.experiment.addData('elapsed.time', elapsedTime.getTime())
    TextComponent text_19
      letterHeight = 0.075
      startVal [time (s)] = 0
      units = norm
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      text:
        Thank you for completing the tasks

        On the next few screens there are lists of words that describe feelings people have

        Please read each one carefully. Then click the answer which best describes how you feel right now

        Make sure you answer every question

        Please press the mouse to begin
    MouseComponent mouse_9
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.5
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    TextComponent BRUMSheader_2
      letterHeight = 0.1
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text = Rating Scale Instructions
      units = norm
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  Routine instrBRUMSpre
    CodeComponent instrBRUMStimer
      Code Type = Auto->JS
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      End Routine:
        psychoJS.experiment.addData('elapsed.time', elapsedTime.getTime())
    TextComponent text_8
      letterHeight = 0.075
      startVal [time (s)] = 0
      units = norm
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      text:
        On the next few screens there are lists of words that describe feelings people have

        Please read each one carefully. Then click the answer which best describes how you feel right now

        Make sure you answer every question

        Please press the mouse to begin
    MouseComponent mouse_4
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.5
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    TextComponent BRUMSheader
      letterHeight = 0.1
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text = Rating Scale Instructions
      units = norm
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  Routine end
    CodeComponent elapsed_time_code
      Code Type = Auto->JS
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      End Routine:
        psychoJS.experiment.addData('elapsed.time', elapsedTime.getTime())
    TextComponent text_20
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        End of Experiment

        Thank you for taking part

        Please email Ellie with your participant ID

        You will then receive instructions about how to claim the compensation for your time

        Press the space bar to close the experiment
    KeyboardComponent key_resp_12
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instrMENTROTbreak4
    CodeComponent instrNBACK_timer_10
      Code Type = Auto->JS
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      Begin Routine:
        instrMENTROTbreak4Timer = util.Clock()
      End Routine:
        psychoJS.experiment.addData('elapsed.time', elapsedTime.getTime())
        psychoJS.experiment.addData('break4.duration', instrMENTROTbreak4Timer.getTime())
        instrMENTROTbreak4Timer = []
    KeyboardComponent key_resp_13
      allowedKeys = ["k"]
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent instrHeaderText_15
      letterHeight = 0.1
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text = Optional rest break
      units = norm
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    TextComponent text_21
      letterHeight = 0.075
      startVal [time (s)] = 0
      units = norm
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      text [set every repeat]:
        Next task: Mental Rotation

        Decide if the two shapes are the same

        Press 'k' they are the same

        Press 'd' if they are not the same

        Respond as quickly and accurately as possible

        Press 'k' when ready to begin
  Routine instrSEARCHbreak3
    CodeComponent instrNBACK_timer_2
      Code Type = Auto->JS
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      Begin Routine:
        instrSEARCHbreak3Timer = util.Clock()
      End Routine:
        psychoJS.experiment.addData('elapsed.time', elapsedTime.getTime())
        psychoJS.experiment.addData('break3.duration', instrSEARCHbreak3Timer.getTime())
        instrSEARCHbreak3Timer = []
    TextComponent instrHeaderText_5
      letterHeight = 0.1
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text = Optional rest break
      units = norm
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    TextComponent text_5
      letterHeight = 0.075
      startVal [time (s)] = 0
      units = norm
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      text [set every repeat]:
        Next task: Visual Search

        Press 'k' if you can see the letter T
        Press 'd' if you can not see the letter T

        Respond as quickly and accurately as possible

        Press 'k' to begin
    KeyboardComponent key_resp_4
      allowedKeys = ['k']
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine instrSEARCHbreak7
    CodeComponent instrNBACK_timer_6
      Code Type = Auto->JS
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      Begin Routine:
        instrSEARCHbreak7Timer = util.Clock()
      End Routine:
        psychoJS.experiment.addData('elapsed.time', elapsedTime.getTime())
        psychoJS.experiment.addData('break7.duration', instrSEARCHbreak7Timer.getTime())
        instrSEARCHbreak7Timer = []
    TextComponent instrHeaderText_11
      letterHeight = 0.1
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text = Optional rest break
      units = norm
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    TextComponent text_15
      letterHeight = 0.075
      startVal [time (s)] = 0
      units = norm
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      text [set every repeat]:
        Next task: Visual Search

        Press 'k' if you can see the letter T
        Press 'd' if you can not see the letter T

        Respond as quickly and accurately as possible

        Press 'k' to begin
    KeyboardComponent key_resp_15
      allowedKeys = ['k']
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine instrSEARCHbreak10
    CodeComponent instrNBACK_timer_7
      Code Type = Auto->JS
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      Begin Routine:
        instrSEARCHbreak10Timer = util.Clock()
      End Routine:
        psychoJS.experiment.addData('elapsed.time', elapsedTime.getTime())
        psychoJS.experiment.addData('break10.duration', instrSEARCHbreak10Timer.getTime())
        instrSEARCHbreak10Timer = []
    TextComponent instrHeaderText_12
      letterHeight = 0.1
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text = Optional rest break
      units = norm
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    TextComponent text_16
      letterHeight = 0.075
      startVal [time (s)] = 0
      units = norm
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      text [set every repeat]:
        Next task: Visual Search

        Press 'k' if you can see the letter T
        Press 'd' if you can not see the letter T

        Respond as quickly and accurately as possible

        Press 'k' to begin
    KeyboardComponent key_resp_5
      allowedKeys = ['k']
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine searchTrial
    CodeComponent defineFunctionsSearch
      Code Type = JS
      Begin JS Routine:
        shuffle = util.shuffle

        function choice(arr) {
          return arr[Math.floor(Math.random() * arr.length)];
        }
    CodeComponent searchCode
      Code Type = Auto->JS
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      Begin Experiment:
        orientList = [0, 90, 180, 270]
        PosList = [[.45, -.45], [.45, -.15], [.45, .15], [.45, .45], [.15, -.45], [.15, -.15], [.15, .15], [.15, .45], [-.15, -.45], [-.15, -.15], [-.15, .15], [-.15, .45], [-.45, -.45], [-.45, -.15], [-.45, .15], [-.45, .45]]
      Begin Routine:
        shuffle(PosList)

        targetOrient = choice(orientList)
        stim2Orient = choice (orientList)
        stim3Orient = choice(orientList)
        stim4Orient = choice(orientList)
        stim5Orient = choice(orientList)
        stim6Orient = choice(orientList)
        stim7Orient = choice(orientList)
        stim8Orient = choice(orientList)
        stim9Orient = choice(orientList)
        stim10Orient = choice(orientList)
        stim11Orient = choice(orientList)
    KeyboardComponent key_resp_14
      allowedKeys = 'k', 'd'
      correctAns = $corrResponse
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent targetStim
      letterHeight = 0.15
      ori [set every repeat] = targetOrient
      pos [set every repeat] = PosList[1]
      startVal [time (s)] = 0.0
      text [set every repeat] = $targetLetter
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    TextComponent searchStim2
      letterHeight = 0.15
      ori [set every repeat] = stim2Orient
      pos [set every repeat] = PosList[2]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = L
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    TextComponent searchStim3
      letterHeight = 0.15
      ori [set every repeat] = stim3Orient
      pos [set every repeat] = PosList[3]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = L
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    TextComponent searchStim4
      letterHeight = 0.15
      ori [set every repeat] = stim4Orient
      pos [set every repeat] = PosList[4]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = L
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    TextComponent searchStim5
      letterHeight = 0.15
      ori [set every repeat] = stim5Orient
      pos [set every repeat] = PosList[5]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = L
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    TextComponent searchStim6
      letterHeight = 0.15
      ori [set every repeat] = stim6Orient
      pos [set every repeat] = PosList[6]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = L
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    TextComponent searchStim7
      letterHeight = 0.15
      ori [set every repeat] = stim7Orient
      pos [set every repeat] = PosList[7]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = L
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    TextComponent searchStim8
      letterHeight = 0.15
      ori [set every repeat] = stim8Orient
      pos [set every repeat] = PosList[8]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = L
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    TextComponent searchStim9
      letterHeight = 0.15
      ori [set every repeat] = stim9Orient
      pos [set every repeat] = PosList[9]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = L
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    TextComponent searchStim10
      letterHeight = 0.15
      ori [set every repeat] = stim10Orient
      pos [set every repeat] = PosList[10]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = L
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    TextComponent searchStim11
      letterHeight = 0.15
      ori [set every repeat] = stim11Orient
      pos [set every repeat] = PosList[11]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = L
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  Routine searchFeedback
    CodeComponent searchFeedback_code_3
      Code Type = Auto->JS
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      Begin Experiment:
        msg = ' '
      Begin Routine:
        if key_resp_14.corr:
            msg = "Correct"
        else:
            msg = "Incorrect"
    TextComponent searchFeedbackText
      color = $[1.000,1.000,-1.000]
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine F_ISA
    MouseComponent mouse_22
      forceEndRoutineOnPress = never
      saveMouseState = never
      startVal [time (s)] = 0.5
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    PolygonComponent mouse_visibility
      fillColor = $[-1.000,-1.000,-1.000]
      nVertices = 180
      pos [set every frame] = (mouse_22.getPos()[0], mouse_22.getPos()[1])
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        Timer = util.Clock()
      Each Frame:
        if slider.getRating() > 0:
            continueRoutine = false
    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        psychoJS.experiment.addData('elapsed.time', elapsedTime.getTime())
        psychoJS.experiment.addData('F_ISA.duration', Timer.getTime())
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Please rate your level of mental fatigue  from 1-5:
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = ("very low (alert)", "low", "medium", "very high (fatigued)")
      pos = (0.1, 0.6)
      size = (0.75, 0.1)
      startVal [time (s)] = 0.0
      styles = ('rating', 'whiteOnBlack')
      ticks = (1, 2, 3, 4, 5)
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Flow
  Routine intro
  Routine F_ISA
  Routine instrBRUMSpre
  Routine BRUMS_1
  Routine BRUMS_2
  Routine BRUMS_3
  Routine instrAXCPTbreak1
  Routine createLoopTimer
  LoopInitiator AXCPTtrialsLoop1 loopType="TrialHandler"
    conditionsFile = trialType.csv
    loopType = random
    nReps = 6000
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    conditions:
      [OrderedDict([('trialNumber', 1), ('trial', 'AX'), ('cueType', 'A'), ('probeType', 'X'), ('trialType', 'target'), ('corrResponse', 'k')]),
      OrderedDict([('trialNumber', 2), ('trial', 'AX'), ('cueType', 'A'), ('probeType', 'X'), ('trialType', 'target'), ('corrResponse', 'k')]),
      OrderedDict([('trialNumber', 3), ('trial', 'AX'), ('cueType', 'A'), ('probeType', 'X'), ('trialType', 'target'), ('corrResponse', 'k')]),
      OrderedDict([('trialNumber', 4), ('trial', 'AX'), ('cueType', 'A'), ('probeType', 'X'), ('trialType', 'target'), ('corrResponse', 'k')]),
      OrderedDict([('trialNumber', 5), ('trial', 'AX'), ('cueType', 'A'), ('probeType', 'X'), ('trialType', 'target'), ('corrResponse', 'k')]),
      OrderedDict([('trialNumber', 6), ('trial', 'AX'), ('cueType', 'A'), ('probeType', 'X'), ('trialType', 'target'), ('corrResponse', 'k')]),
      OrderedDict([('trialNumber', 7), ('trial', 'AX'), ('cueType', 'A'), ('probeType', 'X'), ('trialType', 'target'), ('corrResponse', 'k')]),
      OrderedDict([('trialNumber', 8), ('trial', 'BX'), ('cueType', 'B'), ('probeType', 'X'), ('trialType', 'probeWrong'), ('corrResponse', 'd')]),
      OrderedDict([('trialNumber', 9), ('trial', 'AY'), ('cueType', 'A'), ('probeType', 'Y'), ('trialType', 'cueWrong'), ('corrResponse', 'd')]),
      OrderedDict([('trialNumber', 10), ('trial', 'BY'), ('cueType', 'B'), ('probeType', 'Y'), ('trialType', 'bothWrong'), ('corrResponse', 'd')])]
    Routine timer
    Routine AXCPTtrial
    Routine AXCPTprobe
    Routine AXCPTfeedback
  LoopTerminator AXCPTtrialsLoop1
  Routine instrNBACKbreak2
  Routine createLoopTimer
  LoopInitiator NBackTargetLoop1 loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine timer
    Routine NBackFirst3Trials
  LoopTerminator NBackTargetLoop1
  LoopInitiator NBackTrialsLoop1 loopType="TrialHandler"
    conditionsFile = 2-back_loop.xlsx
    loopType = random
    nReps = 6000
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    conditions:
      [OrderedDict([('trial', 1), ('trialType', 'target'), ('corrResponse', 'k')]),
      OrderedDict([('trial', 2), ('trialType', 'target'), ('corrResponse', 'k')]),
      OrderedDict([('trial', 3), ('trialType', 'target'), ('corrResponse', 'k')]),
      OrderedDict([('trial', 4), ('trialType', 'nonTarget'), ('corrResponse', 'd')]),
      OrderedDict([('trial', 5), ('trialType', 'nonTarget'), ('corrResponse', 'd')]),
      OrderedDict([('trial', 6), ('trialType', 'nonTarget'), ('corrResponse', 'd')]),
      OrderedDict([('trial', 7), ('trialType', 'nonTarget'), ('corrResponse', 'd')]),
      OrderedDict([('trial', 8), ('trialType', 'nonTarget'), ('corrResponse', 'd')]),
      OrderedDict([('trial', 9), ('trialType', 'nonTarget'), ('corrResponse', 'd')]),
      OrderedDict([('trial', 10), ('trialType', 'nonTarget'), ('corrResponse', 'd')])]
    Routine timer
    Routine NBackRemainderTrials
    Routine NBackFeedback
  LoopTerminator NBackTrialsLoop1
  Routine instrSEARCHbreak3
  Routine createLoopTimer
  LoopInitiator searchLoop1 loopType="TrialHandler"
    conditionsFile = visualSearchConds.csv
    loopType = random
    nReps = 6000
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    conditions:
      [OrderedDict([('cond', 'target'), ('targetLetter', 'T'), ('corrResponse', 'k')]),
      OrderedDict([('cond', 'nonTarget'), ('targetLetter', 'L'), ('corrResponse', 'd')])]
    Routine timer
    Routine searchTrial
    Routine searchFeedback
  LoopTerminator searchLoop1
  Routine instrMENTROTbreak4
  Routine createLoopTimer
  LoopInitiator mentRotTrialsLoop1 loopType="TrialHandler"
    conditionsFile = response.csv
    loopType = random
    nReps = 6000
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    conditions:
      [OrderedDict([('imagefile', '10_0.jpg'), ('orientation', 0), ('corrResponse', 'k')]),
      OrderedDict([('imagefile', '10_0_R.jpg'), ('orientation', 0), ('corrResponse', 'd')]),
      OrderedDict([('imagefile', '10_100.jpg'), ('orientation', 100), ('corrResponse', 'k')]),
      OrderedDict([('imagefile', '10_100_R.jpg'), ('orientation', 100), ('corrResponse', 'd')]),
      OrderedDict([('imagefile', '10_150.jpg'), ('orientation', 150), ('corrResponse', 'k')]),
      OrderedDict([('imagefile', '10_150_R.jpg'), ('orientation', 150), ('corrResponse', 'd')]),
      OrderedDict([('imagefile', '10_50.jpg'), ('orientation', 50), ('corrResponse', 'k')]),
      OrderedDict([('imagefile', '10_50_R.jpg'), ('orientation', 50), ('corrResponse', 'd')]),
      OrderedDict([('imagefile', '11_0.jpg'), ('orientation', 0), ('corrResponse', 'k')]),
      OrderedDict([('imagefile', '11_0_R.jpg'), ('orientation', 0), ('corrResponse', 'd')]),
      OrderedDict([('imagefile', '11_100.jpg'), ('orientation', 100), ('corrResponse', 'k')]),
      OrderedDict([('imagefile', '11_100_R.jpg'), ('orientation', 100), ('corrResponse', 'd')]),
      OrderedDict([('imagefile', '11_150.jpg'), ('orientation', 150), ('corrResponse', 'k')]),
      OrderedDict([('imagefile', '11_150_R.jpg'), ('orientation', 150), ('corrResponse', 'd')]),
      OrderedDict([('imagefile', '11_50.jpg'), ('orientation', 50), ('corrResponse', 'k')]),
      OrderedDict([('imagefile', '11_50_R.jpg'), ('orientation', 50), ('corrResponse', 'd')]),
      OrderedDict([('imagefile', '12_0.jpg'), ('orientation', 0), ('corrResponse', 'k')])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
    Routine timer
    Routine mentRotTrial
    Routine mentRotFeedback
  LoopTerminator mentRotTrialsLoop1
  Routine instrNBACKbreak5
  Routine createLoopTimer
  LoopInitiator NBackTargetLOOP2 loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine timer
    Routine NBackFirst3Trials
  LoopTerminator NBackTargetLOOP2
  LoopInitiator NBackTrialsLoop2 loopType="TrialHandler"
    conditionsFile = 2-back_loop.xlsx
    loopType = random
    nReps = 6000
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    conditions:
      [OrderedDict([('trial', 1), ('trialType', 'target'), ('corrResponse', 'k')]),
      OrderedDict([('trial', 2), ('trialType', 'target'), ('corrResponse', 'k')]),
      OrderedDict([('trial', 3), ('trialType', 'target'), ('corrResponse', 'k')]),
      OrderedDict([('trial', 4), ('trialType', 'nonTarget'), ('corrResponse', 'd')]),
      OrderedDict([('trial', 5), ('trialType', 'nonTarget'), ('corrResponse', 'd')]),
      OrderedDict([('trial', 6), ('trialType', 'nonTarget'), ('corrResponse', 'd')]),
      OrderedDict([('trial', 7), ('trialType', 'nonTarget'), ('corrResponse', 'd')]),
      OrderedDict([('trial', 8), ('trialType', 'nonTarget'), ('corrResponse', 'd')]),
      OrderedDict([('trial', 9), ('trialType', 'nonTarget'), ('corrResponse', 'd')]),
      OrderedDict([('trial', 10), ('trialType', 'nonTarget'), ('corrResponse', 'd')])]
    Routine timer
    Routine NBackRemainderTrials
    Routine NBackFeedback
  LoopTerminator NBackTrialsLoop2
  Routine instrAXCPTbreak6
  Routine createLoopTimer
  LoopInitiator AXCPTtrialsLoop2 loopType="TrialHandler"
    conditionsFile = trialType.csv
    loopType = random
    nReps = 6000
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    conditions:
      [OrderedDict([('trialNumber', 1), ('trial', 'AX'), ('cueType', 'A'), ('probeType', 'X'), ('trialType', 'target'), ('corrResponse', 'k')]),
      OrderedDict([('trialNumber', 2), ('trial', 'AX'), ('cueType', 'A'), ('probeType', 'X'), ('trialType', 'target'), ('corrResponse', 'k')]),
      OrderedDict([('trialNumber', 3), ('trial', 'AX'), ('cueType', 'A'), ('probeType', 'X'), ('trialType', 'target'), ('corrResponse', 'k')]),
      OrderedDict([('trialNumber', 4), ('trial', 'AX'), ('cueType', 'A'), ('probeType', 'X'), ('trialType', 'target'), ('corrResponse', 'k')]),
      OrderedDict([('trialNumber', 5), ('trial', 'AX'), ('cueType', 'A'), ('probeType', 'X'), ('trialType', 'target'), ('corrResponse', 'k')]),
      OrderedDict([('trialNumber', 6), ('trial', 'AX'), ('cueType', 'A'), ('probeType', 'X'), ('trialType', 'target'), ('corrResponse', 'k')]),
      OrderedDict([('trialNumber', 7), ('trial', 'AX'), ('cueType', 'A'), ('probeType', 'X'), ('trialType', 'target'), ('corrResponse', 'k')]),
      OrderedDict([('trialNumber', 8), ('trial', 'BX'), ('cueType', 'B'), ('probeType', 'X'), ('trialType', 'probeWrong'), ('corrResponse', 'd')]),
      OrderedDict([('trialNumber', 9), ('trial', 'AY'), ('cueType', 'A'), ('probeType', 'Y'), ('trialType', 'cueWrong'), ('corrResponse', 'd')]),
      OrderedDict([('trialNumber', 10), ('trial', 'BY'), ('cueType', 'B'), ('probeType', 'Y'), ('trialType', 'bothWrong'), ('corrResponse', 'd')])]
    Routine timer
    Routine AXCPTtrial
    Routine AXCPTprobe
    Routine AXCPTfeedback
  LoopTerminator AXCPTtrialsLoop2
  Routine instrSEARCHbreak7
  Routine createLoopTimer
  LoopInitiator searchLoop2 loopType="TrialHandler"
    conditionsFile = visualSearchConds.csv
    loopType = random
    nReps = 6000
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    conditions:
      [OrderedDict([('cond', 'target'), ('targetLetter', 'T'), ('corrResponse', 'k')]),
      OrderedDict([('cond', 'nonTarget'), ('targetLetter', 'L'), ('corrResponse', 'd')])]
    Routine timer
    Routine searchTrial
    Routine searchFeedback
  LoopTerminator searchLoop2
  Routine instrMENTROTbreak8
  Routine createLoopTimer
  LoopInitiator mentRotTrialsLoop2 loopType="TrialHandler"
    conditionsFile = response.csv
    loopType = random
    nReps = 6000
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    conditions:
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    Routine mentRotTrial
    Routine mentRotFeedback
    Routine timer
  LoopTerminator mentRotTrialsLoop2
  Routine instrNBACKbreak9
  Routine createLoopTimer
  LoopInitiator NBackTargetLoop3 loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine timer
    Routine NBackFirst3Trials
  LoopTerminator NBackTargetLoop3
  LoopInitiator NBackTrialsLoop3 loopType="TrialHandler"
    conditionsFile = 2-back_loop.xlsx
    loopType = random
    nReps = 6000
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    conditions:
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    Routine timer
    Routine NBackRemainderTrials
    Routine NBackFeedback
  LoopTerminator NBackTrialsLoop3
  Routine instrSEARCHbreak10
  Routine createLoopTimer
  LoopInitiator searchLoop3 loopType="TrialHandler"
    conditionsFile = visualSearchConds.csv
    loopType = random
    nReps = 6000
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    conditions:
      [OrderedDict([('cond', 'target'), ('targetLetter', 'T'), ('corrResponse', 'k')]),
      OrderedDict([('cond', 'nonTarget'), ('targetLetter', 'L'), ('corrResponse', 'd')])]
    Routine timer
    Routine searchTrial
    Routine searchFeedback
  LoopTerminator searchLoop3
  Routine instrMENTROTbreak11
  Routine createLoopTimer
  LoopInitiator mentRotTrialsLoop3 loopType="TrialHandler"
    conditionsFile = response.csv
    loopType = random
    nReps = 6000
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    conditions:
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    Routine mentRotTrial
    Routine mentRotFeedback
    Routine timer
  LoopTerminator mentRotTrialsLoop3
  Routine instrAXCPTbreak12
  Routine createLoopTimer
  LoopInitiator AXCPTtrialsLoop3 loopType="TrialHandler"
    conditionsFile = trialType.csv
    loopType = random
    nReps = 6000
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    conditions:
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    Routine timer
    Routine AXCPTtrial
    Routine AXCPTprobe
    Routine AXCPTfeedback
  LoopTerminator AXCPTtrialsLoop3
  Routine instrBRUMSpost
  Routine BRUMS_1
  Routine BRUMS_2
  Routine BRUMS_3
  Routine end
